PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = experiment1_eeg
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      opacity = 0
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        import brainaccess_board as bb

        # Create an LSL stream with markers
        stim = bb.stimulation_connect(name="Marker")
      Begin Routine:
        t0 = 0
        polygon.opacity = 0.0
        polygon_2.opacity = 1.0   # start with polygon_2 visible
        count=0
        first=True
        space_count = 0
        isOn = False  # stimulus currently ON?
        stim_ok=stim.have_consumers()
        while stim_ok==False:
            stim_ok=stim.have_consumers()
        stim.annotate(str(201))
        print(f"Sent marker: 201")
      Each Frame:
        # elapsed time since last reset (15 = 5s ON + 10s OFF)
        cycleTime = (t - t0) % 15.0

        # --- inputs this frame ---
        enter_pressed = bool(key_resp_2.getKeys(keyList=['return'], waitRelease=False))

        # desired state BEFORE logging (Enter forces OFF and resets phase to give full 10s OFF)
        if enter_pressed:
            desired_on = False
            t0 = t - 5.0                  # makes cycleTime == 5 → next 10 s stay OFF
        else:
            desired_on = (cycleTime < 5.0) and (first is False)

        # --- edge detection: log & mark only when state CHANGES ---
        if desired_on != isOn:
            isOn = desired_on
            unix_time = time.time()
            thisExp.addData("event_tstamp", unix_time)
            thisExp.addData("event_time", t)
            if isOn:
                count += 1
                thisExp.addData("count", count)
                thisExp.addData("stimuli", 1)
                stim.annotate(str(101))
                print(f"Sent marker: 101")
                # EEG Stimulus ON
            else:
                thisExp.addData("stimuli", 0)
                stim.annotate(str(201))   # EEG Stimulus OFF
                print(f"Sent marker: 201")
            thisExp.nextEntry()

        # --- apply visuals (no extra logging here) ---
        if isOn:
            polygon.opacity = 1.0
            polygon_2.opacity = 0.0
        else:
            polygon.opacity = 0.0
            polygon_2.opacity = 1.0

        # allow future ON windows after first 5 s of the cycle
        if cycleTime >= 5.0:
            first = False

        # --- log SPACE presses only while OFF ---
        if not isOn:
            keys3 = key_resp_3.getKeys(keyList=['space'], waitRelease=False)
            for k in keys3:
                space_count += 1
                unix_time = time.time()
                thisExp.addData("space_press_unix", unix_time)
                thisExp.addData("space_press_rt", k.rt)
                thisExp.addData("space_press_count", space_count)
                thisExp.addData("stimuli", 0)
                # (optional) push a response marker immediately:
                # push_marker(301)
                thisExp.nextEntry()
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Preciona la barra espacio cada 1 segundo, mientras miras el centro de la pantalla. Luego de cierto tiempo aparecerá una figura en el centro de la pantalla. Cuando eso suceda, debes presionar Enter.

        [Presiona espacio para continuar]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine trial
