PsychoPy2experiment version="2024.1.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 45):02.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  backgroundFit = scale-down
  color = $[0,0,0.3]
  expName = Exp_attention
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  runMode = 0
  tbModel = Tobii Pro Spark
  tbSampleRate = 60
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Routines
  Routine blank
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    TextComponent TextB
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        bkgcolor=[0,0,0.3]
        win.setColor(bkgcolor)
  Routine trial
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    ImageComponent ImageProd1
      image [set every frame] = $ImgProd1
      pos = (xcoord2, ycoord1)
      size = (xsizeimg , ysizeimg)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent ImageProd2
      image [set every frame] = $ImgProd2
      pos = (xcoord3, ycoord1)
      size = (xsizeimg , ysizeimg)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Quality_Label
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord1, locations[0][1])
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Quality
        (1-10)
    TextboxComponent Brand_Rep_Label
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord1, locations[1][1])
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Brand Reputation
        (1-10)
    TextboxComponent Calories_Label
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord1, locations[2][1])
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      text [set every repeat] = Calories
      units = norm
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    TextboxComponent Flavour_Label
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord1, locations[3][1])
      size = (xsizela , ysizela)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Flavour
        (1-10)
    TextboxComponent Quality1
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[0][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Brand_Rep1
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[1][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Calories1
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[2][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Flavour1
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord2, locations[3][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Quality2
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[0][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Brand_Rep2
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[1][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Calories2
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[2][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent Flavour2
      bold = False
      borderColor = white
      color = gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      pos [set every repeat] = (xcoord3, locations[3][1])
      size = (xsizele , ysizele)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse
      clickable = ImageProd1,ImageProd2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        nLoop=1
        phase=1
        Trials1=20 #20
        Trials2=20 #20
        Recurrency = 20
        Trials=Trials1+Trials2
        mouse_delay = 1.5
        last_click_time = -mouse_delay
        #pid=int(expInfo['participant'])

        #Listas por si acaso:
        Products = ['Bohney', 'Colalola', 'Haphy', 'Mohshom', 'Phospho']
        AllAttributes = ['Quality', 'Brand_Rep', 'Calories', 'Flavour']
        Attributes = ['Calories', 'Quality'] #['Quality', 'Brand_Rep', 'Calories', 'Flavour' ]

        #definir largos
        n_filas = 5 + len(Attributes)
        dist_y = 2 / ( n_filas ) #2/7
        dist_x = 0.7

        #locations params
        #Images
        xcoord1 = - dist_x
        xcoord2 = 0
        xcoord3 = dist_x
        ycoord1 = 1 - 2*dist_y
        ycoord2 = ycoord1 - 2*dist_y
        ycoord3 = ycoord2 - dist_y
        ycoord4 = ycoord3 - dist_y
        ycoord5 = ycoord4 - dist_y

        #locations as vectors
        loc1 = [xcoord1, ycoord1]; #Imagen
        loc2 = [xcoord1, ycoord2]; #Quality
        loc3 = [xcoord1, (ycoord3)]; #Brand_Rep
        loc4 = [xcoord1, (ycoord4)]; #Calories
        loc5 = [xcoord1, (ycoord5)]; #Flavour
        locAtt = [loc2, loc3, loc4, loc5]
        element_to_position = {}
        position_iter = iter(locAtt)

        print(loc1,'-\n',loc2,'-\n',loc3,'-\n',loc4,'-\n',loc5,'-|\n',position_iter)

        #new version
        #locations = [
        #    next(position_iter) if item in Attributes else [2,2]
        #    for item in AllAttributes
        #]
        #print(locations)

        for el in Attributes:
            element_to_position[el] = next(position_iter)
        print(element_to_position)

        locations = []
        for item in AllAttributes:
            if item in element_to_position:
                locations.append(element_to_position[item])
            else:
                locations.append([2,2])
        print("locations:",locations)

        #if len(Attributes) == 2:
        #    locations = [loc2, loc3, [2,2], [2,2]]
        #elif len(Attributes) == 3:
        #    locations = [loc2, loc3, loc4, [2,2]]
        #else:
        #    locations = [loc2, loc3, loc4, loc5]

        #size params
        xsizeimg = dist_y
        ysizeimg = 2*dist_y
        xsizele = 0.2
        ysizele = 0.1
        xsizela = 0.3
        ysizela = 0.2
        xETreg = 0.4
        yETreg = 0.3

        #shuffle locations
        #shuffle(locations)

        #colors
        #color1 = [0.8216, 0.7412, 0.2039]
        #color2 = [0.6471, 0.4118, 0.0980]
        #color3 = [0.4824, 0.4353, -0.1608] #-0.16
        #color4 = [1.000, 0.4112, 0.3569]
        #colors = [color1, color2, color3, color4]

        #EYETRACKER
        from psychopy.iohub import launchHubServer
        from psychopy.core import getTime, wait
      Begin Experiment:
        print('Exp starting')
        pid = expInfo['participant'] #id participante
        useRows = '0:19' #trials

        #bases
        ImgProd1 = 'Colas/Bohney.png'
        ImgProd2 = 'Colas/Colalola.png'

        #------------------NEWET------------------------
        from psychopy import visual, event, core
        import psychopy.visual
        import psychopy.event
        import tobii_research as tr
        found_eyetrackers = tr.find_all_eyetrackers()
        my_eyetracker = found_eyetrackers[0]
        print("Address: " + my_eyetracker.address)
        print("Model: " + my_eyetracker.model)
        #print("Name (It's OK if this is empty): " + my_eyetracker.device_name)
        #print("Serial number: " + my_eyetracker.serial_number)
        #-----------------------------------------------

        print('BeginExperment ended------------------------')
      Begin Routine:
        print('Routine starting ',nLoop)

        #products
        print(product1,'----------------------------')
        print(product2,'----------------------------')

        bkgcolor=[0,0,0.3]
        win.setColor(bkgcolor)
        waiting = False
        ETRECORD_FR = []
        ETRECORD_FRT = []
        ETRECORD_FRT_1970 = []
        LEFTPUPIL_FR = []
        RIGHTPUPIL_FR = []
        TIMEGAZETOB = []
        TIMEGAZE = []
        MOUSEGAZE = []
        TOBIIGAZE = []
        TOBIIGAZEL = []
        TOBIIGAZELT = []
        TOBIIGAZER = []
        StartTimeRoutine = t
        TIMEGAZE_1970 = []


        #------------------NEWET------------------------
        # This will be called every time there is new gaze data
        def gaze_data_callback(gaze_data):
             #Extract the data we are interested in
            tg = gaze_data.system_time_stamp
            lp = gaze_data.left_eye.pupil.diameter
            rp = gaze_data.right_eye.pupil.diameter
            lx = gaze_data.left_eye.gaze_point.position_on_display_area[0]
            ly = gaze_data.left_eye.gaze_point.position_on_display_area[1]
            lv = gaze_data.left_eye.gaze_point.validity
            rx = gaze_data.right_eye.gaze_point.position_on_display_area[0]
            ry = gaze_data.right_eye.gaze_point.position_on_display_area[1]
            rv = gaze_data.right_eye.gaze_point.validity
            # Add gaze data to the buffer
            LEFTPUPIL_FR.append(lp)
            RIGHTPUPIL_FR.append(rp)
            TIMEGAZETOB.append(tg)
            TOBIIGAZEL.append( [lx, ly, lv] )
            TOBIIGAZER.append( [rx, ry, lr] )
            TOBIIGAZELT.append( [lx, ly, lv, tg] )
        #---------------------------------------------------



        # Start the callback function-----------
        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
        #-----------------------------------------------

        #prod1
        Quality1.text = product1_Quality
        Brand_Rep1.text = product1_Brand_Rep
        Calories1.text = product1_Calories
        Flavour1.text = product1_Flavour
        #prod2
        Quality2.text = product2_Quality
        Brand_Rep2.text = product2_Brand_Rep
        Calories2.text = product2_Calories
        Flavour2.text = product2_Flavour

        if product1 == 'Bohney':
            ImgProd1 = 'Colas/bohney.png'
        elif product1 == 'Colalola':
            ImgProd1 = 'Colas/colalola.png'
        elif product1 == 'Haphy':
            ImgProd1 = 'Colas/haphy.png'
        elif product1 == 'Mohshom':
            ImgProd1 = 'Colas/mohshom.png'
        else:
            ImgProd1 = 'Colas/phospho.png'
        if product2 == 'Bohney':
            ImgProd2 = 'Colas/bohney.png'
        elif product2 == 'Colalola':
            ImgProd2 = 'Colas/colalola.png'
        elif product2 == 'Haphy':
            ImgProd2 = 'Colas/haphy.png'
        elif product2 == 'Mohshom':
            ImgProd2 = 'Colas/mohshom.png'
        else:
            ImgProd2 = 'Colas/phospho.png'

        clicked_things = []
        clickables = [ImageProd1, ImageProd2]

        #ImageProd1.setImage(ImgProd1)
        #ImageProd2.setImage(ImgProd2)
      Each Frame:
        clickedN = 0
        current_time = globalClock.getTime()
        buttonsPressed = mouse.getPressed()
        # check if the mouse is pressed in any of the boxes
        for clickable in clickables:
            if mouse.isPressedIn(clickable):
                clicked_things.append(clickable.name)

        for clickable in clickables:
            if clickable.name in clicked_things:
                clickedN += 1
                choice=clickable.name
            if clickedN == 1 and not waiting:
                waiting = True
                startTime=t

        if clickedN == 1 and waiting:
            if t > startTime + 1:
                continueRoutine = False
        #elif buttonsPressed[2] and (current_time - last_click_time >= mouse_delay):
        #    choice = 'None'
        #    clicked_things.append(clickable.name)
        #    last_click_time = current_time
        #    continueRoutine = False


        #EyeGaze
        ETRECORD_FR.append(etRecord.pos)
        MOUSEGAZE.append([mouse.getPos()[0],mouse.getPos()[1]])
        TIMEGAZE.append( t )
        TIMEGAZE_1970.append( psychopy.core.getAbsTime() )
        ETRECORD_FRT.append([etRecord.pos,t])
        ETRECORD_FRT_1970.append([etRecord.pos, psychopy.core.getAbsTime() ])
      End Experiment:
        #intento no borrar eyetracker
        #my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
        #Test.finished= True
      End Routine:
        #print('Routine ending ',nLoop)
        thisExp.addData('Choice', choice)
        thisExp.addData('Trial', nLoop)
        #if nLoop>=Trials1:
        #    phase=2
        #trial duration
        thisExp.addData('TrialDuration', t - StartTimeRoutine )

        #stop recording
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)

        #eyetracker data
        thisExp.addData('ETRECORD_FR', ETRECORD_FR )
        thisExp.addData('ETRECORD_FR_TIME', ETRECORD_FRT )
        thisExp.addData('ETRECORD_1970_TIME', ETRECORD_FRT_1970 )
        thisExp.addData('LEFTPUPIL_FR', LEFTPUPIL_FR )
        thisExp.addData('RIGHTPUPIL_FR', RIGHTPUPIL_FR )
        thisExp.addData('TIME_GAZE', TIMEGAZE )
        thisExp.addData('TIME_GAZE_1970', TIMEGAZE_1970 )
        thisExp.addData('TIME_GAZE_TOBII', TIMEGAZETOB )
        thisExp.addData('MOUSE_GAZE', MOUSEGAZE )
        thisExp.addData('TOBII_GAZE', TOBIIGAZE )
        thisExp.addData('TOBII_GAZE_LEFT', TOBIIGAZEL )
        thisExp.addData('TOBII_GAZE_LEFT_TIME', TOBIIGAZELT )
        thisExp.addData('TOBII_GAZE_RIGHT', TOBIIGAZER )

        #eyetracker data
        thisExp.addData('Choice1', ImgProd1 )
        thisExp.addData('Choice2', ImgProd2 )
        thisExp.addData('Choice', choice )

        #sizedata
        thisExp.addData('imgsize', [ xsizeimg , ysizeimg ] )
        thisExp.addData('attsize', [ xsizele , ysizele ] )
        thisExp.addData('prodsize', [ xsizela , ysizela ] )
        thisExp.addData('regETsize', [ xETreg, yETreg ] )

        #locations labels choices
        thisExp.addData('Product1', product1 )
        thisExp.addData('Product2', product2 )

        #locations labels choices
        thisExp.addData('Loc_Img_Prod1', [ xcoord2 , ycoord1 ] )
        thisExp.addData('Loc_Img_Prod1', [ xcoord3 , ycoord1 ] )

        #locations labels choices
        thisExp.addData('Loc_Quality_Label', [ xcoord1 , ycoord2 ] )
        thisExp.addData('Loc_Brand_Rep_Label', [ xcoord1 , ycoord3 ] )
        thisExp.addData('Loc_Calories_Label', [ xcoord1 , ycoord4 ] )
        thisExp.addData('Loc_Flavour_Label', [ xcoord1 , ycoord5 ] )

        #locations prod1 values
        thisExp.addData('Loc_Quality_Prod1', [ xcoord2 , ycoord2 ] )
        thisExp.addData('Loc_Brand_Rep_Prod1', [ xcoord2 , ycoord3 ] )
        thisExp.addData('Loc_Calories_Prod1', [ xcoord2 , ycoord4 ] )
        thisExp.addData('Loc_Flavour_Prod1', [ xcoord2 , ycoord5 ] )

        #locations prod2 values
        thisExp.addData('Loc_Quality_Prod1', [ xcoord3 , ycoord2 ] )
        thisExp.addData('Loc_Brand_Rep_Prod1', [ xcoord3 , ycoord3 ] )
        thisExp.addData('Loc_Calories_Prod1', [ xcoord3 , ycoord4 ] )
        thisExp.addData('Loc_Flavour_Prod1', [ xcoord3 , ycoord5 ] )

        #empezar condición para sgte trial
        #if (phase == 2) and (nLoop % Recurrency == 0):
        #    while locations == shuffle(locations):
        #        print(locations)
        #nLoop+=1
    RegionOfInterestComponent ET_Quality1
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, locations[0][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_BrandRep1
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, locations[1][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Calories1
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, locations[2][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Flavour1
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every frame] = (xcoord2, locations[3][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Quality2
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord3, locations[0][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Brand_Rep2
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord3, locations[1][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Calories2
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord3, locations[2][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Flavour2
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord3, locations[3][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_ImageProd1
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord2, ycoord1)
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_ImageProd2
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord3, ycoord1)
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Quality_Label
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord1, locations[0][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Brand_Rep_Label
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord1, locations[1][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Calories_Label
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord1, locations[2][1])
      save = every look
      shape = rectangle
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    RegionOfInterestComponent ET_Flavour_Label
      anchor = center
      debug = False
      draggable = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every repeat] = (xcoord1, locations[3][1])
      save = every look
      shape = rectangle
      size = (xETreg , yETreg)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine End
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    TextboxComponent Msg
      bold = False
      borderColor = white
      color = Gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks for participating!
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        bkgcolor=[0,0,0.2]
        win.setColor(bkgcolor)
  Routine Intro
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    TextComponent Intro_
      letterHeight = 0.05
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = You have to make a trip to your place of work. You'll have to choose between three ways of getting there, or not take any of them. Each has different characteristics, which are shown below their names. Choose the alternative that suits you better, just as you would in real life.
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    TextComponent Attributes_
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        'The Attributes are:
        Cost: How much does it cost (in USD).
        Time: The length of the travel (in minutes).
        Comfort: How comfort the travel will be (0 to 5 stars).
        Pollution (trees): How many trees does it need to compensate the CO2 Emissions. The more trees are needed, the more contaminating it is.',
    TextComponent ButtonIntro_
      letterHeight = 0.05
      pos = (0, 0 )
      startVal [time (s)] = 0.0
      text = To start, press the button down below.
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    ImageComponent StartButton
      image = pos_junk_food/StartButton.png
      pos = (0, -0.3)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = StartButton
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        clicked_things1=[]
        clickables1 = [StartButton]
        waiting1=False
      Each Frame:
        clickedNum = 0
        for clickable in clickables1:
            if mouse.isPressedIn(clickable):
                clicked_things1.append(clickable.name)
        for clickable in clickables1:
            if clickable.name in clicked_things1:
                clickedNum += 1
            if clickedNum == 1 and not waiting1:
                waiting1 = True

        if clickedNum == 1 and waiting1:
            continueRoutine = False
  Routine Blank2
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    TextComponent Starting_title
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Starting in...
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    TextComponent One_title
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent Two_title
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Three_title
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 3
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Flow
  Routine Intro
  Routine Blank2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $useRows
    conditionsFile = FondecytValues.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('product1', 'Colalola'), ('product1_Quality', 8), ('product1_Brand_Rep', 9), ('product1_Calories', 150), ('product1_Flavour', 9), ('product2', 'Bohney'), ('product2_Quality', 7), ('product2_Brand_Rep', 7), ('product2_Calories', 250), ('product2_Flavour', 6)]),
      OrderedDict([('product1', 'Haphy'), ('product1_Quality', 9), ('product1_Brand_Rep', 10), ('product1_Calories', 120), ('product1_Flavour', 9), ('product2', 'Bohney'), ('product2_Quality', 7), ('product2_Brand_Rep', 7), ('product2_Calories', 250), ('product2_Flavour', 6)]),
      OrderedDict([('product1', 'Mohshom'), ('product1_Quality', 7), ('product1_Brand_Rep', 8), ('product1_Calories', 200), ('product1_Flavour', 7), ('product2', 'Haphy'), ('product2_Quality', 9), ('product2_Brand_Rep', 10), ('product2_Calories', 120), ('product2_Flavour', 9)]),
      OrderedDict([('product1', 'Colalola'), ('product1_Quality', 8), ('product1_Brand_Rep', 9), ('product1_Calories', 150), ('product1_Flavour', 9), ('product2', 'Phospho'), ('product2_Quality', 9), ('product2_Brand_Rep', 8), ('product2_Calories', 180), ('product2_Flavour', 8)]),
      OrderedDict([('product1', 'Phospho'), ('product1_Quality', 9), ('product1_Brand_Rep', 8), ('product1_Calories', 180), ('product1_Flavour', 8), ('product2', 'Colalola'), ('product2_Quality', 8), ('product2_Brand_Rep', 9), ('product2_Calories', 150), ('product2_Flavour', 9)])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
    Routine trial
    Routine blank
  LoopTerminator trials
  Routine End
