PsychoPy2experiment version="2024.1.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 45):02.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  backgroundFit = scale-down
  expName = Exp_attention
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  runMode = 1
  tbModel = Tobii Pro Spark
  tbSampleRate = 60
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Routines
  Routine End
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    TextboxComponent Msg
      bold = False
      borderColor = white
      color = Gray
      editable = False
      fillColor = white
      letterHeight = 0.05
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thanks for participating!
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        bkgcolor=[0,0,0.2]
        win.setColor(bkgcolor)
  Routine Intro
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    ImageComponent StartButton
      image = StartButton.png
      pos = (0, -0.3)
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = StartButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Blank2
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    TextComponent Starting_title
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Starting in...
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    TextComponent One_title
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent Two_title
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Three_title
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 3
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  Routine Images
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    ImageComponent Gatito
      image = gatito.png
      ori [set every repeat] = gradogato
      pos [set every repeat] = (positiongato_X, positiongato_Y)
      size [set every repeat] = (sizegato_X, sizegato_Y)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
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    CodeComponent codegato
      Code Type = Auto->JS
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      Before Experiment:
        #EYETRACKER IMPORTS
        from psychopy.iohub import launchHubServer
        from psychopy.core import getTime, wait
        import random


        #cat árameters
        leftright = random.randint(1, 2)
        updown = random.randint(1, 2)
        positiongato_X = random.uniform(0.25, 0.8)*(-1)**(leftright)
        positiongato_Y = random.uniform(0.25, 0.8)*(-1)**(updown)
        sizegato_X = random.uniform(0.1, 0.25)
        sizegato_Y = random.uniform(0.1, 0.25)
        gradogato = 360*random.uniform(0, 1)
      Begin Experiment:
        #PsychoPy Imports (time, etc)
        from psychopy import visual, event, core
        import psychopy.visual
        import psychopy.event
        import tobii_research as tr

        color1 = random.uniform(0, 1)
        color2 = random.uniform(0, 1)
        color3 = random.uniform(0, 1)

        #background color
        bkgcolor=[color1,color2,color3]
        win.setColor(bkgcolor)

        found_eyetrackers = tr.find_all_eyetrackers()
        my_eyetracker = found_eyetrackers[0]
        print("Address: " + my_eyetracker.address)
        print("Model: " + my_eyetracker.model)
      Begin Routine:
        LEFTPUPIL_FR = []
        RIGHTPUPIL_FR = []
        TOBIIGAZELT = []
        ETRECORD_FR = []


        #------------------NEWET------------------------
        # This will be called every time there is new gaze data
        #This is the pupil diameter size function
        def gaze_data_callback(gaze_data):
             #Extract the data we are interested in
            tg = gaze_data.system_time_stamp
            lp = gaze_data.left_eye.pupil.diameter
            rp = gaze_data.right_eye.pupil.diameter
            lx = gaze_data.left_eye.gaze_point.position_on_display_area[0]
            ly = gaze_data.left_eye.gaze_point.position_on_display_area[1]
            lv = gaze_data.left_eye.gaze_point.validity
            rx = gaze_data.right_eye.gaze_point.position_on_display_area[0]
            ry = gaze_data.right_eye.gaze_point.position_on_display_area[1]
            rv = gaze_data.right_eye.gaze_point.validity
            # Add gaze data to the buffer
            LEFTPUPIL_FR.append(lp)
            RIGHTPUPIL_FR.append(rp)
            TOBIIGAZELT.append( [lx, ly ] )
        #---------------------------------------------------


        # Start the callback function-----------
        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
        #-----------------------------------------------
      Each Frame:
        #EyeGaze
        #We append in a list the position of the eye on screen
        ETRECORD_FR.append([etRecord_3.pos,t])
      End Routine:
        #stop recording
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)

        #Export of the gaze data (and pupils)
        thisExp.addData('ETRECORD_FR', ETRECORD_FR )
        thisExp.addData('LEFTPUPIL_FR', LEFTPUPIL_FR )
        thisExp.addData('RIGHTPUPIL_FR', RIGHTPUPIL_FR )
        #Test if you get the gaze data from pupil funciton
        thisExp.addData('TOBIIGAZELT', TOBIIGAZELT )

        #randomize everything
        color1 = random.uniform(0, 1)
        color2 = random.uniform(0, 1)
        color3 = random.uniform(0, 1)
        bkgcolor=[color1,color2,color3]
        win.setColor(bkgcolor)
        leftright = random.randint(1, 2)
        updown = random.randint(1, 2)
        positiongato_X = random.uniform(0.25, 0.8)*(-1)**(leftright)
        positiongato_Y = random.uniform(0.25, 0.8)*(-1)**(updown)
        sizegato_X = random.uniform(0.1, 0.25)
        sizegato_Y = random.uniform(0.1, 0.25)
        gradogato = 360*random.uniform(0, 1)
    EyetrackerRecordComponent etRecord_3
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    MouseComponent mouse_4
      clickable = StartButton
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine Intro
  Routine Blank2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Images
  LoopTerminator trials
  Routine End
